PsychoPy2experiment version="3.0.6"
Settings
  Experiment info = {'participant': 'John Doe', 'session': 'Test'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  color = black
  expName = Main
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Routines
  Routine trial
    TextComponent targetText
      color [set every repeat] = $stimColor
      font = Calibri Light
      languageStyle = Arabic
      letterHeight = 0.15
      startVal [time (s)] = 0.50
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimText
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    KeyboardComponent respKeyboard
      allowedKeys = 'a','s','k','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.50
      stopVal [duration (s)] = 1.0
      store = first key
      storeCorrect = True
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  Routine instruction
    TextComponent instructionText
      font = Calibri Light
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text =  Press "Space" To Start
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    KeyboardComponent instructionKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine praInstruction
    TextComponent praText
      font = Calibri Light
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = Respond To The Colors And Ignore The Shapes
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    KeyboardComponent praInsKeboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine practice
    KeyboardComponent praKeyboard
      allowedKeys = 'a','s','k','l'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      store = first key
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    PolygonComponent praShape
      fillColor [set every repeat] = $stimShapeColor
      lineColor [set every repeat] = $stimShapeColor
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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Flow
  Routine praInstruction
  LoopInitiator practices loopType="TrialHandler"
    conditionsFile = ShapesColors.xlsx
    isTrials = False
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('stimShapeColor', 'green')]),
      OrderedDict([('stimShapeColor', 'blue')]),
      OrderedDict([('stimShapeColor', 'red')]),
      OrderedDict([('stimShapeColor', 'yellow')])]
    Routine practice
  LoopTerminator practices
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = WordsColors.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('stimText', 'سبز'), ('stimColor', 'green'), ('corrAns', 'a')]),
      OrderedDict([('stimText', 'سبز'), ('stimColor', 'blue'), ('corrAns', 's')]),
      OrderedDict([('stimText', 'سبز'), ('stimColor', 'red'), ('corrAns', 'k')]),
      OrderedDict([('stimText', 'سبز'), ('stimColor', 'yellow'), ('corrAns', 'l')]),
      OrderedDict([('stimText', 'آبی'), ('stimColor', 'green'), ('corrAns', 'a')]),
      OrderedDict([('stimText', 'آبی'), ('stimColor', 'blue'), ('corrAns', 's')]),
      OrderedDict([('stimText', 'آبی'), ('stimColor', 'red'), ('corrAns', 'k')]),
      OrderedDict([('stimText', 'آبی'), ('stimColor', 'yellow'), ('corrAns', 'l')]),
      OrderedDict([('stimText', 'قرمز'), ('stimColor', 'green'), ('corrAns', 'a')]),
      OrderedDict([('stimText', 'قرمز'), ('stimColor', 'blue'), ('corrAns', 's')]),
      OrderedDict([('stimText', 'قرمز'), ('stimColor', 'red'), ('corrAns', 'k')]),
      OrderedDict([('stimText', 'قرمز'), ('stimColor', 'yellow'), ('corrAns', 'l')]),
      OrderedDict([('stimText', 'زرد'), ('stimColor', 'green'), ('corrAns', 'a')]),
      OrderedDict([('stimText', 'زرد'), ('stimColor', 'blue'), ('corrAns', 's')]),
      OrderedDict([('stimText', 'زرد'), ('stimColor', 'red'), ('corrAns', 'k')]),
      OrderedDict([('stimText', 'زرد'), ('stimColor', 'yellow'), ('corrAns', 'l')])]
    Routine trial
  LoopTerminator trials
